protocol ScreenLHPolicies_Awesome

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/wutil"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/microArch/driver/liquidhandling"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/doe"
	"path/filepath"
	antha "github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/AnthaPath"
	"fmt"
	"strconv"
)


// Input parameters for this protocol (data)
Parameters (
	TotalVolume Volume
	TestSolVolumes []Volume
	NumberofReplicates int
	Imagefilename string
	NumberofBlanks int

)

// Data which is returned from this protocol, and data types
Data (
	Runtowelllocationmap []string //map[string]string
	Runcount int
	Pixelcount int
	Errors []error
	Blankwells []string
	//NeatSamplewells []string 
)


// Physical Inputs to this protocol with types
Inputs (
	TestSols []*wtype.LHComponent
	Diluent *wtype.LHComponent
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Reactions []*wtype.LHComponent
)

Requirements {
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	var rotate = false
	var autorotate = true
	
	chosencolourpalette := image.AvailablePalettes["Palette1"]
	positiontocolourmap, _,_ := image.ImagetoPlatelayout(Imagefilename, OutPlate, &chosencolourpalette, rotate,autorotate) 
	
	Runtowelllocationmap = make([]string,0)
	perconditionuntowelllocationmap := make([]string,0)
	
		//Runtowelllocationmap = make(map[string]string)

	// work out well coordinates for any plate
	wellpositionarray := make([]string, 0)


	for location, colour := range positiontocolourmap {
		R,G,B,A := colour.RGBA()
	
		if uint8(R) == 242 && uint8(G) ==243 && uint8(B) == 242 && uint8(A) == 255 {
			continue
			}else {wellpositionarray = append(wellpositionarray,location)
		}
	}
	
	
	
	/*
	//alphabet := "ABCDEFGHIJKLMNOPQRSTUVWXYZ"
	alphabet := []string{"A", "B", "C", "D", "E", "F", "G", "H", "I", "J",
		"K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X",
		"Y", "Z", "AA", "BB", "CC", "DD", "EE", "FF"}
	//k := 0
	for j := 0; j < OutPlate.WlsY; j++ {
		for i := 0; i < OutPlate.WlsX; i++ { //countingfrom1iswhatmakesushuman := j + 1
			//k = k + 1
			wellposition := string(alphabet[j]) + strconv.Itoa(i+1)
			//fmt.Println(wellposition, k)
			wellpositionarray = append(wellpositionarray, wellposition)
		}

	}
	*/
	reactions := make([]*wtype.LHComponent,0)
	
	//policies, names := liquidhandling.PolicyMaker(liquidhandling.Allpairs, "DOE_run",false)
	
	//intfactors := []string{"Pre_MIX","POST_MIX"}
	policies, names,err := liquidhandling.PolicyMakerfromDesign("ScreenLHPolicyDOE2.xlsx", "DOE_run")
	if err != nil{
		panic(err)
	}
	
	
	
	counter := 0
	for l := 0; l < len(TestSolVolumes); l++ {
	for k := 0; k< len(TestSols);k++{
	for j:= 0; j< NumberofReplicates;j++{
	for i := 0; i < len(policies); i++ {
		
		
		
		eachreaction := make([]*wtype.LHComponent, 0)
		
		// keep default policy for diluent
		//Diluent.Type = names[i]
		//fmt.Println(Diluent.Type)
		
		bufferSample := mixer.SampleForTotalVolume(Diluent, TotalVolume)
		eachreaction = append(eachreaction,bufferSample)
		testSample := mixer.Sample(TestSols[k], TestSolVolumes[l])
		
		TestSols[k].Type = wtype.LiquidTypeFromString(names[i])
		
		eachreaction = append(eachreaction,testSample)
		reaction := MixTo(OutPlate.Type,wellpositionarray[counter],0, eachreaction...)
		fmt.Println("where am I?",wellpositionarray[counter])
		Runtowelllocationmap= append(Runtowelllocationmap,wtype.LiquidTypeName(TestSols[k].Type) +":" + wellpositionarray[counter])
		perconditionuntowelllocationmap = append(perconditionuntowelllocationmap,wtype.LiquidTypeName(TestSols[k].Type) +":" + wellpositionarray[counter])
		//Runtowelllocationmap[Diluent.Type]= wellpositionarray[counter]
		reactions = append(reactions,reaction)
	counter = counter + 1
	}
	
	outputsandwich := strconv.Itoa(wutil.RoundInt(TestSolVolumes[l].RawValue()))+TestSols[k].CName+strconv.Itoa(j+1)
	
	outputfilename := filepath.Join(antha.Dirpath(),"DOE2"+ "_" + outputsandwich+ ".xlsx")
	Errors = append(Errors,doe.AddWelllocations(filepath.Join(antha.Dirpath(), "ScreenLHPolicyDOE2.xlsx"),0,perconditionuntowelllocationmap,"DOE_run",outputfilename,[]string{"Volume","Solution","Replicate"}, []interface{}{TestSolVolumes[l].ToString(),TestSols[k].CName,string(j)}))
	
	// other things to add to check for covariance
	// order in which wells were pippetted
	// plate ID
	// row 
	// column
	// ambient temp 
	
	// empty
	perconditionuntowelllocationmap = make([]string,0)
	}
	}
	}
	
	
	// add blanks
	
	Blankwells = make([]string,0)
	
	alphabet := []string{"A", "B", "C", "D", "E", "F", "G", "H", "I", "J",
		"K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X",
		"Y", "Z", "AA", "BB", "CC", "DD", "EE", "FF"}
	
	
	for m := 0; m< NumberofBlanks; m++ {
	//eachreaction := make([]*wtype.LHComponent, 0)
		
		// use defualt policy for blank
		
		bufferSample := mixer.Sample(Diluent, TotalVolume)
		//eachreaction = append(eachreaction,bufferSample)
		
		
		// add blanks to last column of plate
		well := alphabet[OutPlate.WlsY-1-m]+strconv.Itoa(OutPlate.WlsX)
		fmt.Println("blankwell", well)
		reaction := MixTo(OutPlate.Type,well, 0,bufferSample)
		//fmt.Println("where am I?",wellpositionarray[counter])
		//Runtowelllocationmap= append(Runtowelllocationmap,"Blank"+ strconv.Itoa(m+1) +":" + well)
		Blankwells = append(Blankwells,well)
	
		reactions = append(reactions,reaction)
	counter = counter + 1
	
	}
	
	Reactions = reactions
	Runcount = len(Reactions)
	Pixelcount = len(wellpositionarray)
	
	
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
